PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = truc
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Routines
  Routine sync
    TextComponent starttext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press “s” to start
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine play_tone
    CodeComponent code_Tones
      Code Type = Py
      Begin Experiment:
        count=0
      Begin Routine:
        current_volumes=volumes[count]
        current_tones=tones[count]
        current_bands=bands[count]
      End Routine:
        if count==2904:
            count=0
        else: count+=1


        thisExp.addData('volume', current_volumes)
        thisExp.addData('tones', current_tones)
        thisExp.addData('band', current_bands)
    SoundComponent Tones
      sound [set every repeat] = $current_tones
      startVal [time (s)] = 0.025
      stopVal [duration (s)] = 0.075
      volume [set every repeat] = current_volumes
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  Routine setup
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import random
        import numpy as np
      Begin Experiment:
        frequencies = np.arange(125,8000)

        dx = 4/7875
        X  = np.arange(-2, 2, dx)
        Y  = np.exp(-X ** 2)
        Y /= (dx * Y).sum()
        CY = np.cumsum(Y * dx)
        CY = CY/sum(CY)

        band = ['low','high']
        sband = np.repeat("silence",88)
        hband = np.repeat("high",88)
        lband = np.repeat("low",88)
        svolume = np.ones(88)*0
        lvolume = np.ones(88)*1
        hvolume = np.ones(88)*1

        tones = np.ones(88)*100
        bands = sband
        volumes = svolume
      Begin Routine:
        for i in range (1,9):
          random.shuffle(band)

          if band[0] == 'low':
            tones = np.hstack((tones, np.random.choice(frequencies,88,p=CY[::-1])))
            bands = np.hstack((bands,lband))
            volumes = np.hstack((volumes,lvolume))
            tones = np.hstack((tones, np.ones(88)*100))
            bands = np.hstack((bands,sband))
            volumes = np.hstack((volumes,svolume))
            tones = np.hstack((tones, np.random.choice(frequencies,88,p=CY)))
            bands = np.hstack((bands,hband))
            volumes = np.hstack((volumes,hvolume))
            tones = np.hstack((tones, np.ones(88)*100))
            bands = np.hstack((bands,sband))
            volumes = np.hstack((volumes,svolume))
          else:
            tones = np.hstack((tones, np.random.choice(frequencies,88,p=CY)))
            bands = np.hstack((bands,hband))
            volumes = np.hstack((volumes,hvolume))
            tones = np.hstack((tones, np.ones(88)*100))
            bands = np.hstack((bands,sband))
            volumes = np.hstack((volumes,svolume))
            tones = np.hstack((tones, np.random.choice(frequencies,88,p=CY[::-1])))
            bands = np.hstack((bands,lband))
            volumes = np.hstack((volumes,lvolume))
            tones = np.hstack((tones, np.ones(88)*100))
            bands = np.hstack((bands,sband))
            volumes = np.hstack((volumes,svolume))
      End Routine:
        #thisExp.addData('volume', volumes)
        #thisExp.addData('tones', tones)
        #thisExp.addData('band', bands)
Flow
  Routine setup
  Routine sync
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 2904
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    Routine play_tone
  LoopTerminator trials
