PsychoPy2experiment version="2022.2.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = broad
  keyboardBackend = ioHub
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Routines
  Routine sync
    TextComponent starttext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press “s” to start
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine play_tone
    CodeComponent code_Tones
      Code Type = Py
      Begin Experiment:
        count=0
      Begin Routine:
        thisExp.addData('StartBeep',myClock.getTime())

        current_volumes=volumes[count]
        current_tones=tones[count]
        current_bands=bands[count]
      End Routine:
        if count==2904:
            count=0
        else: count+=1


        thisExp.addData('volume', current_volumes)
        thisExp.addData('tones', current_tones)
        thisExp.addData('band', current_bands)
    SoundComponent Tones
      saveStartStop = False
      sound [set every repeat] = $current_tones
      startVal [time (s)] = 0.025
      stopVal [duration (s)] = 0.075
      syncScreenRefresh = False
      volume [set every repeat] = current_volumes
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  Routine setup
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import random
        import numpy as np
      Begin Experiment:
        myClock = core.Clock()

        frequencies = np.arange(125,8000)

        dx = 4/7875
        X  = np.arange(-2, 2, dx)
        Y  = np.exp(-X ** 2)
        Y /= (dx * Y).sum()
        CY = np.cumsum(Y * dx)
        CY = CY/sum(CY)

        band = ['low','high']
        sband = np.repeat("silence",88)
        hband = np.repeat("high",88)
        lband = np.repeat("low",88)
        svolume = np.ones(88)*0
        lvolume = np.ones(88)*1
        hvolume = np.ones(88)*1

        tones = np.ones(88)*100
        bands = sband
        volumes = svolume
      Begin Routine:
        for i in range (1,9):
          random.shuffle(band)

          if band[0] == 'low':
            tones = np.hstack((tones, np.random.choice(frequencies,88,p=CY[::-1])))
            bands = np.hstack((bands,lband))
            volumes = np.hstack((volumes,lvolume))

            tones = np.hstack((tones, np.random.choice(frequencies,88,p=CY)))
            bands = np.hstack((bands,hband))
            volumes = np.hstack((volumes,hvolume))

            tones = np.hstack((tones, np.ones(88)*100))
            bands = np.hstack((bands,sband))
            volumes = np.hstack((volumes,svolume))
          else:
            tones = np.hstack((tones, np.random.choice(frequencies,88,p=CY)))
            bands = np.hstack((bands,hband))
            volumes = np.hstack((volumes,hvolume))

            tones = np.hstack((tones, np.random.choice(frequencies,88,p=CY[::-1])))
            bands = np.hstack((bands,lband))
            volumes = np.hstack((volumes,lvolume))

            tones = np.hstack((tones, np.ones(88)*100))
            bands = np.hstack((bands,sband))
            volumes = np.hstack((volumes,svolume))
      End Routine:
        #thisExp.addData('volume', volumes)
        #thisExp.addData('tones', tones)
        #thisExp.addData('band', bands)
  Routine start_TR
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      syncScreenRefresh = False
      volume = 0
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Flow
  Routine setup
  Routine sync
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 2200
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    Routine play_tone
  LoopTerminator trials
